PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1707, 960]
  expName = visual_imagery
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Start
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    TextComponent Intro
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Welcome to the experiment!

        Each trial has two parts: imagining and rating.

        In imagination stage, you will see only a grey background. First, you’ll hear a “Ding”, followed by a brief description of an object (e.g., “A red bus”). Your task is to vividly imagine the object in your mind, as clearly as you can, against the grey background. In the first block, you will have 1 second to imagine the object. In the second block, you will have 4 seconds. After the imagination period, you will be asked a simple yes/no question about the object (e.g., “Is it food?”). Please respond by pressing: 's' for YES, 'd' for NO, 'f' for DON'T KNOW (if you didn’t understand what the object is).

        In rating stage, a reference image of the object will appear on screen. Use your mouse to adjust the vividness slider: move the slider to right if your mental image was more vivid, move the slider to left if it was less vivid. Please choose the image that best matches how vivid your mental image felt, not the one that looks the most vivid. Please focus only on vividness and do not have to consider other factors. Use your first impression to rate — there are no right or wrong answers, and no penalty if your image wasn’t very clear. Once you're happy with your rating, press 's' to continue. Each trial ends with a brief rest period showing only the grey background.

        Different levels of image (example of 'A red bus'):




        Now you will have a practice before the main experiment. If you understand everything, press 's' to start!
    KeyboardComponent Intro_Key_Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = imgs_diffusion/bus_imgs_diffusion.jpg
      pos = (0, -0.35)
      size = (1, 0.12)
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent End_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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    KeyboardComponent End_Key_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B1_Interval
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    ImageComponent B1_Inter
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent B1_code1
      Code Type = Auto->JS
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      Begin Routine:
        # interval could be 1,2,3 seconds
        jitter = np.arange(1, 3, 1)
        shuffle(jitter)
  Routine B1_Start
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    TextComponent B1_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Now you can start the official experiment.

        For this block, you have 1 second for imagination.

        Press 's' to continue.
    KeyboardComponent B1_Key_Resp1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B2_Start
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    TextComponent B2_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this block, you have 4 second for imagination.

        You can have a rest.

        When you are ready, press 's' to continue.
    KeyboardComponent B2_Key_Resp1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B2_Interval
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    ImageComponent B2_Inter
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent B2_Code1
      Code Type = Auto->JS
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      Begin Routine:
        # interval could be 1,2,3 seconds
        jitter = np.arange(1, 3, 1)
        shuffle(jitter)
  Routine B1_Imagine
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    ImageComponent B1_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    SoundComponent B1_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + Object + '.mp3'
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      syncScreenRefresh = False
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    SoundComponent B1_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B1_Rate
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    TextComponent B1_RateText
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please choose the clarity that fits your imagination.
      wrapWidth = 10
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    ImageComponent B1_Image
      image [set every frame] = $'imgs_diffusion/' + Object + '6.jpg'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent B1_Slider
      forceEndRoutine = False
      granularity = 1
      initVal = 6
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent B1_Key_Resp2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent B1_Rate_Code
      Code Type = Auto->JS
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      Begin Routine:
        B1_Slider.reset()
        B1_Slider.setValue(6)  # or whatever your midpoint/default is
      Each Frame:
        rating = B1_Slider.getRating()

        # If participant didn't move the slider, use the current marker position
        if rating is None:
            rating = B1_Slider.markerPos  # fallback to the default or current position

        # Now safely try to load the image based on the rating value
        if rating is not None:
            try:
                B1_Image.setImage('imgs_diffusion/' + Object + str(int(rating)) + '.jpg')
            except Exception as e:
                print(f'Error loading image: {e}')
  Routine B2_Imagine
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    ImageComponent B2_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.5
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    SoundComponent B2_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + Object + '.mp3'
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      syncScreenRefresh = False
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    SoundComponent B2_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B2_Rate
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    TextComponent B2_RateText
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please choose the clarity that fits your imagination.
      wrapWidth = 10
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    ImageComponent B2_Image
      image [set every frame] = $'imgs_diffusion/' + Object + '6.jpg'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent B2_Slider
      forceEndRoutine = False
      granularity = 1
      initVal = 6
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    KeyboardComponent B2_Key_Resp2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent B2_Rate_Code
      Code Type = Auto->JS
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      Begin Routine:
        B2_Slider.reset()
        B2_Slider.setValue(6)  # or whatever your midpoint/default is
      Each Frame:
        rating = B2_Slider.getRating()

        # If participant didn't move the slider, use the current marker position
        if rating is None:
            rating = B2_Slider.markerPos  # fallback to the default or current position

        # Now safely try to load the image based on the rating value
        if rating is not None:
            try:
                B2_Image.setImage('imgs_diffusion/' + Object + str(int(rating)) + '.jpg')
            except Exception as e:
                print(f'Error loading image: {e}')
  Routine B1_Catch
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    TextComponent B1_CQ
      letterHeight = 0.1
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CatchQuestion
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    TextComponent B1_CQ_Option
      letterHeight = 0.07
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = YES      NO      DON'T KNOW
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    KeyboardComponent B1_CQ_Key_Resp
      allowedKeys = 's','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B2_Catch
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    TextComponent B2_CQ
      letterHeight = 0.1
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CatchQuestion
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    TextComponent B2_CQ_Option
      letterHeight = 0.07
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = YES      NO      DON'T KNOW
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    KeyboardComponent B2_CQ_Key_Resp
      allowedKeys = 's','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B3_Start
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    TextComponent B3_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this block, you have 6 seconds for imagination.

        Press 's' to continue.
    KeyboardComponent B3_Key_Resp1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B3_Interval
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    ImageComponent B3_Noise1
      image = imgs/noise.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent B3_Code1
      Code Type = Auto->JS
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      Begin Routine:
        # interval could be 3, 4, 5 seconds
        jitter = np.arange(3, 5, 1)
        shuffle(jitter)
  Routine B3_Imagine
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    TextComponent B3_Propmt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.5
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    ImageComponent B3_Noise2
      image = imgs/noise.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.5
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    SoundComponent B3_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + Object + '.mp3'
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
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    SoundComponent B3_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B3_Catch
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    TextComponent B3_CQ
      letterHeight = 0.1
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CatchQuestion
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    TextComponent B3_CQ_Option
      letterHeight = 0.07
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = YES      NO      DON'T KNOW
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    KeyboardComponent B3_CQ_Key_Resp
      allowedKeys = 's','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B3_Rate
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    TextComponent B3_RateText
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please choose the clarity that fits your imagination.
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    ImageComponent B3_Image
      image [set every frame] = imgs/noise.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent B3_Slider
      forceEndRoutine = False
      granularity = 1
      initVal = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent B3_Key_Resp2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent B3_Rate_Code
      Code Type = Auto->JS
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      Each Frame:
        rating = B3_Slider.getRating()
        if rating is not None:
            try:
                B3_Image.setImage('imgs/' + Object + str(int(rating)) + '.jpg')
            except Exception as e:
                print(f'Error loading image: {e}')
  Routine Distraction
    RoutineSettingsComponent Distraction
      disabled = True
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    ImageComponent image_4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = YES           NO
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    KeyboardComponent key_resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B2_Interaval2
    RoutineSettingsComponent B2_Interaval2
      disabled = True
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B2_Perceive
    RoutineSettingsComponent B2_Perceive
      disabled = True
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    ImageComponent B2_P_Image
      image [set every repeat] = $'imgs_diffusion/' + Object + '8.jpg'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent B2_P_Code
      Code Type = Auto->JS
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      Begin Routine:
        B2_P_Image.setImage('imgs_diffusion/' + Object + '8.jpg')
  Routine B2_Interval3
    RoutineSettingsComponent B2_Interval3
      disabled = True
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine P_Interval
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    ImageComponent P_Inter
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent P_Code1
      Code Type = Auto->JS
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      Begin Routine:
        # interval could be 1,2,3 seconds
        jitter = np.arange(1, 3, 1)
        shuffle(jitter)
  Routine P_Start
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    TextComponent P_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a practice before official experiment.

        For this part, you have 1 second for imagination.

        Press 's' to continue.
    KeyboardComponent P_Key_Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine P_Catch
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    TextComponent P_CQ
      letterHeight = 0.1
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CatchQuestion
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    TextComponent P_CQ_Option
      letterHeight = 0.07
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = YES      NO      DON'T KNOW
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    KeyboardComponent P_CQ_Key_Resp
      allowedKeys = 's','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        # Catch question key response (P_CQ_Key_Resp)
        cq_key_pressed = P_CQ_Key_Resp.keys
        cq_key_rt = P_CQ_Key_Resp.rt
        cq_key_duration = None

        thisExp.addData('P_CQ_KeyResp_key', cq_key_pressed)
        thisExp.addData('P_CQ_KeyResp_rt', cq_key_rt)
        thisExp.addData('P_CQ_KeyResp_duration', cq_key_duration)
  Routine P_Rate
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    TextComponent P_RateText
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please choose the clarity that fits your imagination.
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    ImageComponent P_Image
      image [set every frame] = $'imgs_diffusion/' + Object + '6.jpg'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent P_Slider
      forceEndRoutine = False
      granularity = 1
      initVal = 6
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent P_Key_Resp2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent P_Rate_Code
      Code Type = Auto->JS
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      Begin Routine:
        P_Slider.reset()
        P_Slider.setValue(6)  # or whatever your midpoint/default is
      Each Frame:
        rating = P_Slider.getRating()

        # If participant didn't move the slider, use the current marker position
        if rating is None:
            rating = P_Slider.markerPos  # fallback to the default or current position

        # Now safely try to load the image based on the rating value
        if rating is not None:
            try:
                P_Image.setImage('imgs_diffusion/' + Object + str(int(rating)) + '.jpg')
            except Exception as e:
                print(f'Error loading image: {e}')
  Routine P_Imagine
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    ImageComponent P_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    SoundComponent P_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + Object + '.mp3'
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      syncScreenRefresh = False
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    SoundComponent P_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B2_Interval2
    RoutineSettingsComponent B2_Interval2
      disabled = True
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Please remember the next image.
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  Routine B1_Interval2_2
    RoutineSettingsComponent B1_Interval2_2
      disabled = True
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  Routine B2_WM
    RoutineSettingsComponent B2_WM
      disabled = True
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    CodeComponent B2_Memory_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Create a list of image names with specified counts
        B2_image_pool = ['7.jpg'] * 15 + ['9.jpg'] * 15 + ['8.jpg'] * 10
        random.shuffle(B2_image_pool)
        # Initialize a counter
        B2_image_index = 0
      Begin Routine:
        # Get the next image
        B2_chosen_image = B2_image_pool[B2_image_index]
        B2_image_index += 1

        # Set the image for this trial
        B2_Memory_Image.setImage('imgs_diffusion/' + Object + B2_chosen_image)
    ImageComponent B2_Memory_Image
      image [set every repeat] = $'imgs_diffusion/' + Object + B2_chosen_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent B2_Memory_Key_Resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent B2_Memory_Q
      letterHeight = 0.07
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Is this the image you saw?
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    TextComponent B2_Memory_Option
      letterHeight = 0.07
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = YES          NO
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  Routine B2_Perceive_2
    RoutineSettingsComponent B2_Perceive_2
      disabled = True
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    ImageComponent B2_P_Image2
      image [set every repeat] = $'imgs_diffusion/' + Object + '8.jpg'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent B2_P_Code_2
      Code Type = Auto->JS
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      Begin Routine:
        B2_P_Image.setImage('imgs_diffusion/' + Object + '8.jpg')
  Routine B2_Perceive_3
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  Routine WM_P_Perceive
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    CodeComponent WM_P_P_Code
      Code Type = Auto->JS
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      Begin Routine:
        ##### make sure allObjs have same order as the loop file WM_Objects.csv!!!!!!
        allObjs = [
        "bus",
        "sunflower",
        "cabbage",
        "strawberry",
        "pineapple",
        "leaf"
        ]

        # Get current index
        i = WM_P_Trials.thisIndex  # or your_trial_handler.thisN

        # Wrap-around logic for second image index
        if i >= 3:
            j = i - 3  # i = 70–79 → j = 0–9
        else:
            j = i + 3

        # Define image filenames
        img1 = 'imgs_diffusion/' + allObjs[i] + '10.jpg'
        img2 = 'imgs_diffusion/' + allObjs[j] + '10.jpg'  # Object_list is the full list of objects

        # Randomize order
        import random
        image_pair = [img1, img2]
        random.shuffle(image_pair)

        # Assign to variables used by Image components
        imgA = image_pair[0]
        imgB = image_pair[1]
    ImageComponent WM_P_P_Image1
      image [set every repeat] = $imgA
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent WM_P_P_Image2
      image [set every repeat] = $imgB
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2
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    ImageComponent WM_P_P_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 0.5
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  Routine WM_P_Test
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    CodeComponent WM_P_Test_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Create a list of image names with specified counts
        WM_P_T_image_pool = ['6.jpg'] * 2 + ['8.jpg'] * 2 + ['10.jpg'] * 2
        random.shuffle(WM_P_T_image_pool)
        # Initialize a counter
        WM_P_T_image_index = 0
      Begin Routine:
        # Get the next image
        WM_P_T_chosen_image = WM_P_T_image_pool[WM_P_T_image_index]
        WM_P_T_image_index += 1

        # Set the image for this trial
        # WM_P_Test_Image.setImage('imgs_diffusion/' + Object + WM_P_Test_chosen_image)
        thisExp.addData('chosen_image', WM_P_T_chosen_image)
    ImageComponent WM_P_Test_Image
      image [set every repeat] = $'imgs_diffusion/' + allObjs[i] + WM_P_T_chosen_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent WM_P_Test_Resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WM_P_Test_Q
      letterHeight = 0.07
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Is this the image you saw?
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    TextComponent WM_P_Test_Option
      letterHeight = 0.07
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = YES          NO
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  Routine WM_P_WM
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    ImageComponent WM_P_WM_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6.5
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    SoundComponent WM_P_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent WM_P_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + allObjs[i] + '.mp3'
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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  Routine WM_P_Interval
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    TextComponent WM_P_Inter
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Please remember next two images.
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  Routine WM_P_Distract
    RoutineSettingsComponent WM_P_Distract
      disabled = True
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    TextComponent WM_P_D_T
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Distract
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    TextComponent WM_P_Option
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = YES            NO
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    KeyboardComponent WM_P_D_Key_Resp
      allowedKeys = 's', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WM_Distract
    RoutineSettingsComponent WM_Distract
      disabled = True
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    TextComponent WM_D_T
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Distract
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    TextComponent WM_D_Option
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = YES            NO
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    KeyboardComponent WM_D_Key_Resp
      allowedKeys = 's', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WM_xxx
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a practice before official experiment.

        Press 's' when you are ready.
    KeyboardComponent key_resp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WM_P_Start
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    TextComponent WM_P_Intro
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        This is a memory test.

        First, you will see two pictures of different objects one by one. Try to remember them carefully.

        Then, you will hear a "Ding", followed by a short description (like “a red bus”). As soon as you hear the description, try to recall the object image you just saw. You will have 4 seconds to do this.

        Finally, you will see a new image. Your task is to decide quickly if this image is one of the pictures you saw earlier.

        Press 's' if it matches (YES), press 'd' if it does not match (NO).

        Press 's' when you're ready to start the practice.
    KeyboardComponent WM_P_Key_Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent WM_P_Trial_Example
      image = imgs_diffusion/WM_Trial_Example.png
      pos = (0, -0.3)
      size = (1.15, 0.45)
      startVal [time (s)] = 0.0
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  Routine WM_B2_Start
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    TextComponent WM_B2_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You can have a short break before next block.

        Press 's' to continue when you are ready.
    KeyboardComponent WM_B2_Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WM_B2_Interval
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    TextComponent WM_B2_Inter
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please remember next two images.
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  Routine WM_B2_Perceive
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    CodeComponent WM_P_B2_Code
      Code Type = Auto->JS
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      Begin Routine:
        ##### make sure allObjs have same order as the loop file WM_Objects.csv!!!!!!
        B2_allObjs = [
        "rose", "bear", "taxi", "lamp", "cake", "cat", "lettuce", "cup", "table", "sweater",
        "chilli", "spider", "duck", "coin", "onion", "chair", "snake", "bottle", "coconut", "pigeon",
        "cap", "suit", "banana", "kettle", "dress", "pepper", "parrot", "shirt", "suitcase", "mouse",
        "mailbox", "belt", "corn", "ring", "eggplant", "carrot", "cucumber", "butterfly", "jacket", "wolf"
        ]

        # Get current index
        i = WM_B2_Trials.thisIndex  # or your_trial_handler.thisN

        def get_j(i):
            offsets = [10, 20, 30, -10, -20, -30]
            valid_js = [i + offset for offset in offsets if 0 <= i + offset <= 39]
            j = random.choice(valid_js)
            return j

        j = get_j(i)

        # Define image filenames
        img1 = 'imgs_diffusion/' + B2_allObjs[i] + '10.jpg'
        img2 = 'imgs_diffusion/' + B2_allObjs[j] + '10.jpg'  # Object_list is the full list of objects

        # Randomize order
        import random
        image_pair = [img1, img2]
        random.shuffle(image_pair)

        # Assign to variables used by Image components
        imgA = image_pair[0]
        imgB = image_pair[1]
    ImageComponent WM_P_B2_Image1
      image [set every repeat] = $imgA
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent WM_P_B2_Image2
      image [set every frame] = $imgB
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2
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    ImageComponent WM_P_B2_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 0.5
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  Routine WM_B2_WM
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    SoundComponent WM_B2_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent WM_B2_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + B2_allObjs[i] + '.mp3'
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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    ImageComponent WM_B2_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.5
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  Routine WM_B2_Test
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    CodeComponent WM_Test_B2_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Create a list of image names with specified counts
        WM_T_B2_image_pool = ['6.jpg'] * 30 + ['8.jpg'] * 30 + ['10.jpg'] * 20
        random.shuffle(WM_T_B2_image_pool)
        # Initialize a counter
        WM_T_B2_image_index = 0
      Begin Routine:
        # Get the next image
        WM_T_B2_chosen_image = WM_T_B2_image_pool[WM_T_B2_image_index]
        WM_T_B2_image_index += 1

        # Set the image for this trial
        # WM_Test_Image.setImage('imgs_diffusion/' + Object + WM_T_chosen_image)

        thisExp.addData('chosen_image', WM_T_B2_chosen_image)
    ImageComponent WM_Test_B2_Image
      image [set every repeat] = $'imgs_diffusion/' + B2_allObjs[i] + WM_T_B2_chosen_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent WM_Test_B2_Resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WM_Test_B2_Q
      letterHeight = 0.07
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Is this the image you saw?
      wrapWidth = 10
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    TextComponent WM_Test_B2_Option
      letterHeight = 0.07
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = YES          NO
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  Routine WM_Interval
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    TextComponent WM_Inter
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Please remember next two images.
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  Routine WM_Perceive
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    CodeComponent WM_P_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import csv

        ##### make sure current_Object_list have same order as the trial file!!!!!!

        Object_list1 = []
        with open('WM_trial_file1.csv', newline='') as file1:
            reader1 = csv.DictReader(file1)
            for row in reader1:
                Object_list1.append(row['Object'])  # match exact column header

        Object_list2 = []
        with open('WM_trial_file2.csv', newline='') as file2:
            reader2 = csv.DictReader(file2)
            for row in reader2:
                Object_list2.append(row['Object'])
      Begin Routine:
        # Get current index
        i = WM_Trials.thisIndex  # or your_trial_handler.thisN

        def get_j(i):
            offsets = [10, 20, 30, -10, -20, -30]

            if 40 <= i <= 49:
                valid_js = [i + offset for offset in offsets if 10 <= i + offset <= 39]
            else:
                valid_js = [i + offset for offset in offsets if 0 <= i + offset <= 39]

            if not valid_js:
                raise ValueError(f"No valid j for i={i}")

            j = random.choice(valid_js)
            return j

        j = get_j(i)

        # Determine which object list to use
        if trial_file_name == 'WM_trial_file1.csv':
            current_Object_list = Object_list1
        elif trial_file_name == 'WM_trial_file2.csv':
            current_Object_list = Object_list2
        else:
            current_Object_list = []  # fallback

        # Now index the list
        img1 = 'imgs_diffusion/' + current_Object_list[i] + '10.jpg'
        img2 = 'imgs_diffusion/' + current_Object_list[j] + '10.jpg'

        # Randomize order
        import random
        image_pair = [img1, img2]
        random.shuffle(image_pair)

        # Assign to variables used by Image components
        imgA = image_pair[0]
        imgB = image_pair[1]
    ImageComponent WM_P_Image1
      image [set every repeat] = $imgA
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent WM_P_Image2
      image [set every repeat] = $imgB
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2
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    ImageComponent WM_P_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 0.5
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  Routine WM_WM
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    SoundComponent WM_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    SoundComponent WM_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + current_Object_list[i] + '.mp3'
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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    ImageComponent WM_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.5
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  Routine WM_Test
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    CodeComponent WM_Test_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Create a list of image names with specified counts
        WM_T_image_pool = ['6.jpg'] * 35 + ['8.jpg'] * 35 + ['10.jpg'] * 30
        random.shuffle(WM_T_image_pool)
        # Initialize a counter
        WM_T_image_index = 0
      Begin Routine:
        # Get the next image
        WM_T_chosen_image = WM_T_image_pool[WM_T_image_index]
        WM_T_image_index += 1

        # Set the image for this trial
        # WM_Test_Image.setImage('imgs_diffusion/' + Object + WM_T_chosen_image)

        thisExp.addData('chosen_image', WM_T_chosen_image)
    ImageComponent WM_Test_Image
      image [set every repeat] = $'imgs_diffusion/' + current_Object_list[i] + WM_T_chosen_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent WM_Test_Resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WM_Test_Q
      letterHeight = 0.07
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Is this the image you saw?
      wrapWidth = 10
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    TextComponent WM_Test_Option
      letterHeight = 0.07
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = YES          NO
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  Routine WM_Start
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    TextComponent WM_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the official memory test.

        Please let the experimenter know when you are ready to begin.
    KeyboardComponent WM_Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B_Inter
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    TextComponent B_Break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You just completed a block. Now you can have a rest.

        Please let the experimenter know when you are ready to continue.
    KeyboardComponent B_Break_Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_WM
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    TextComponent E_WM
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End of memory test
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Flow
  Routine WM_Start
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = WM_blocks.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block_ID', 'b1'), ('trial_file_name', 'WM_trial_file1.csv')]),
      OrderedDict([('Block_ID', 'b2'), ('trial_file_name', 'WM_trial_file2.csv')])]
    LoopInitiator WM_Trials loopType="TrialHandler"
      conditionsFile = $trial_file_name
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Color', 'red'), ('ObjectPrompt', 'a red apple'), ('Object', 'apple'), ('CatchQuestion', 'Is it a food?'), ('CorrectAnswer', 'YES'), ('Distract', '1 + 2 = 3'), ('DistractAnswer', 'YES')]),
        OrderedDict([('Color', 'black'), ('ObjectPrompt', 'a black camera'), ('Object', 'camera'), ('CatchQuestion', 'Is it a food?'), ('CorrectAnswer', 'NO'), ('Distract', '4 + 3 = 7'), ('DistractAnswer', 'YES')]),
        OrderedDict([('Color', 'yellow'), ('ObjectPrompt', 'a yellow hat'), ('Object', 'hat'), ('CatchQuestion', 'Is it an animal?'), ('CorrectAnswer', 'NO'), ('Distract', '2 + 6 = 8'), ('DistractAnswer', 'YES')]),
        OrderedDict([('Color', 'silver'), ('ObjectPrompt', 'a silver fork'), ('Object', 'fork'), ('CatchQuestion', 'Is it a tool?'), ('CorrectAnswer', 'YES'), ('Distract', '5 + 1 = 6'), ('DistractAnswer', 'YES')]),
        OrderedDict([('Color', 'purple'), ('ObjectPrompt', 'a purple crystal'), ('Object', 'crystal'), ('CatchQuestion', 'Is it an animal?'), ('CorrectAnswer', 'NO'), ('Distract', '3 + 5 = 8'), ('DistractAnswer', 'YES')]),
        OrderedDict([('Color', 'orange'), ('ObjectPrompt', 'an orange sofa'), ('Object', 'sofa'), ('CatchQuestion', 'Is it a food?'), ('CorrectAnswer', 'NO'), ('Distract', '6 + 2 = 8'), ('DistractAnswer', 'YES')]),
        OrderedDict([('Color', 'green'), ('ObjectPrompt', 'a green broccoli'), ('Object', 'broccoli'), ('CatchQuestion', 'Is it a food?'), ('CorrectAnswer', 'YES'), ('Distract', '7 + 1 = 8'), ('DistractAnswer', 'YES')])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
      Routine WM_Interval
      Routine WM_Perceive
      Routine WM_WM
      Routine WM_Test
    LoopTerminator WM_Trials
    Routine B_Inter
  LoopTerminator Blocks
  Routine End_WM
