PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1707, 960]
  expName = visual_imagery
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Start
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  Routine End
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    TextComponent End_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine B1_Interval
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    ImageComponent B1_Inter
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine B1_Start
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    TextComponent B1_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now the Official Experiment Will Begin.



        The procedure is the same as in the practice round, but no reference images will be shown during the vividness rating stage.



        Please let the experimenter know when you are ready to begin.
    KeyboardComponent B1_Key_Resp1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B2_Start
    RoutineSettingsComponent B2_Start
      disabled = True
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    TextComponent B2_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this block, you have 4 second for imagination.

        You can have a rest.

        When you are ready, press 's' to continue.
    KeyboardComponent B2_Key_Resp1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B2_Interval
    RoutineSettingsComponent B2_Interval
      disabled = True
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    ImageComponent B2_Inter
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent B2_Code1
      Code Type = Auto->JS
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      Begin Routine:
        # interval could be 1,2,3 seconds
        jitter = np.arange(1, 3, 1)
        shuffle(jitter)
  Routine B1_Imagine
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    ImageComponent B1_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.5
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    SoundComponent B1_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + Object + '.mp3'
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      syncScreenRefresh = False
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    SoundComponent B1_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B1_Rate
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    TextComponent B1_RateText
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please rate the clarity of your imagination.
      wrapWidth = 10
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    KeyboardComponent B1_Key_Resp2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B2_Imagine
    RoutineSettingsComponent B2_Imagine
      disabled = True
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    ImageComponent B2_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.5
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    SoundComponent B2_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + Object + '.mp3'
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      syncScreenRefresh = False
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    SoundComponent B2_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B2_Rate
    RoutineSettingsComponent B2_Rate
      disabled = True
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    TextComponent B2_RateText
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please rate the clarity of your imagination.
      wrapWidth = 10
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    KeyboardComponent B2_Key_Resp2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B1_Catch
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    TextComponent B1_CQ
      letterHeight = 0.1
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CatchQuestion
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    TextComponent B1_CQ_Option
      letterHeight = 0.07
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = YES      NO      DON'T KNOW
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    KeyboardComponent B1_CQ_Key_Resp
      allowedKeys = 's','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B2_Catch
    RoutineSettingsComponent B2_Catch
      disabled = True
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    TextComponent B2_CQ
      letterHeight = 0.1
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CatchQuestion
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    TextComponent B2_CQ_Option
      letterHeight = 0.07
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = YES      NO      DON'T KNOW
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    KeyboardComponent B2_CQ_Key_Resp
      allowedKeys = 's','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B3_Start
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    TextComponent B3_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this block, you have 6 seconds for imagination.

        Press 's' to continue.
    KeyboardComponent B3_Key_Resp1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B3_Interval
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    ImageComponent B3_Noise1
      image = imgs/noise.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent B3_Code1
      Code Type = Auto->JS
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      Begin Routine:
        # interval could be 3, 4, 5 seconds
        jitter = np.arange(3, 5, 1)
        shuffle(jitter)
  Routine B3_Imagine
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    TextComponent B3_Propmt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.5
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    ImageComponent B3_Noise2
      image = imgs/noise.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.5
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    SoundComponent B3_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + Object + '.mp3'
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
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    SoundComponent B3_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B3_Catch
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    TextComponent B3_CQ
      letterHeight = 0.1
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CatchQuestion
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    TextComponent B3_CQ_Option
      letterHeight = 0.07
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = YES      NO      DON'T KNOW
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    KeyboardComponent B3_CQ_Key_Resp
      allowedKeys = 's','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B3_Rate
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    TextComponent B3_RateText
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please choose the clarity that fits your imagination.
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    ImageComponent B3_Image
      image [set every frame] = imgs/noise.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent B3_Slider
      forceEndRoutine = False
      granularity = 1
      initVal = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent B3_Key_Resp2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent B3_Rate_Code
      Code Type = Auto->JS
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      Each Frame:
        rating = B3_Slider.getRating()
        if rating is not None:
            try:
                B3_Image.setImage('imgs/' + Object + str(int(rating)) + '.jpg')
            except Exception as e:
                print(f'Error loading image: {e}')
  Routine Distraction
    RoutineSettingsComponent Distraction
      disabled = True
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    ImageComponent image_4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = YES           NO
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    KeyboardComponent key_resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B1_Interval3
    RoutineSettingsComponent B1_Interval3
      disabled = True
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine B2_Interaval2
    RoutineSettingsComponent B2_Interaval2
      disabled = True
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B2_Perceive
    RoutineSettingsComponent B2_Perceive
      disabled = True
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    ImageComponent B2_P_Image
      image [set every repeat] = $'imgs_diffusion/' + Object + '8.jpg'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent B2_P_Code
      Code Type = Auto->JS
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      Begin Routine:
        B2_P_Image.setImage('imgs_diffusion/' + Object + '8.jpg')
  Routine B2_Interval3
    RoutineSettingsComponent B2_Interval3
      disabled = True
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine B1_Interval2
    RoutineSettingsComponent B1_Interval2
      disabled = True
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Please remember the next image.
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  Routine B1_Perceive
    RoutineSettingsComponent B1_Perceive
      disabled = True
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    ImageComponent B1_P_Image
      image [set every repeat] = $'imgs_diffusion/' + Object + '8.jpg'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent B1_P_Code
      Code Type = Auto->JS
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      Begin Routine:
        B1_P_Image.setImage('imgs_diffusion/' + Object + '8.jpg')
  Routine B1_WM
    RoutineSettingsComponent B1_WM
      disabled = True
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    CodeComponent B1_Memory_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Create a list of image names with specified counts
        B1_image_pool = ['7.jpg'] * 15 + ['9.jpg'] * 15 + ['8.jpg'] * 10
        random.shuffle(B1_image_pool)
        # Initialize a counter
        B1_image_index = 0
      Begin Routine:
        # Get the next image
        B1_chosen_image = B1_image_pool[B1_image_index]
        B1_image_index += 1

        # Set the image for this trial
        B1_Memory_Image.setImage('imgs_diffusion/' + Object + B1_chosen_image)
    ImageComponent B1_Memory_Image
      image [set every repeat] = $'imgs_diffusion/' + Object + B1_chosen_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent B1_Memory_Resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent B1_Memory_Q
      letterHeight = 0.07
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Is this the image you saw?
      wrapWidth = 10
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    TextComponent B1_Memory_Option
      letterHeight = 0.07
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = YES          NO
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  Routine P_Interval
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    ImageComponent P_Inter
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine P_Start
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    TextComponent P_Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a practice before official experiment.

        Please let the experimenter know when you are ready to begin.
    KeyboardComponent P_Key_Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine P_Catch
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    TextComponent P_CQ
      letterHeight = 0.1
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CatchQuestion
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    TextComponent P_CQ_Option
      letterHeight = 0.07
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = YES      NO      DON'T KNOW
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    KeyboardComponent P_CQ_Key_Resp
      allowedKeys = 's','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        # Catch question key response (P_CQ_Key_Resp)
        cq_key_pressed = P_CQ_Key_Resp.keys
        cq_key_rt = P_CQ_Key_Resp.rt
        cq_key_duration = None

        thisExp.addData('P_CQ_KeyResp_key', cq_key_pressed)
        thisExp.addData('P_CQ_KeyResp_rt', cq_key_rt)
        thisExp.addData('P_CQ_KeyResp_duration', cq_key_duration)
  Routine P_Rate
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    TextComponent P_RateText
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please rate the clarity of your imagination.
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    ImageComponent P_IMG1
      image [set every repeat] = $'imgs_diffusion/' + Object + '1.jpg'
      pos = (-0.72, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent P_IMG2
      image [set every repeat] = $'imgs_diffusion/' + Object + '3.jpg'
      pos = (-0.36, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent P_IMG3
      image [set every repeat] = $'imgs_diffusion/' + Object + '5.jpg'
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent P_IMG4
      image [set every repeat] = $'imgs_diffusion/' + Object + '8.jpg'
      pos = (0.36, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent P_IMG5
      image [set every repeat] = $'imgs_diffusion/' + Object + '50.jpg'
      pos = (0.72, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    KeyboardComponent P_Key_Resp2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine P_Imagine
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    ImageComponent P_BG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.5
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    SoundComponent P_Sound
      sound [set every repeat] = $'AuditoryPrompt/' + Object + '.mp3'
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      syncScreenRefresh = False
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    SoundComponent P_Cue
      sound [set every repeat] = AuditoryPrompt/Cue.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B2_Interval2
    RoutineSettingsComponent B2_Interval2
      disabled = True
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Please remember the next image.
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  Routine B1_Interval2_2
    RoutineSettingsComponent B1_Interval2_2
      disabled = True
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  Routine B2_WM
    RoutineSettingsComponent B2_WM
      disabled = True
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    CodeComponent B2_Memory_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Create a list of image names with specified counts
        B2_image_pool = ['7.jpg'] * 15 + ['9.jpg'] * 15 + ['8.jpg'] * 10
        random.shuffle(B2_image_pool)
        # Initialize a counter
        B2_image_index = 0
      Begin Routine:
        # Get the next image
        B2_chosen_image = B2_image_pool[B2_image_index]
        B2_image_index += 1

        # Set the image for this trial
        B2_Memory_Image.setImage('imgs_diffusion/' + Object + B2_chosen_image)
    ImageComponent B2_Memory_Image
      image [set every repeat] = $'imgs_diffusion/' + Object + B2_chosen_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent B2_Memory_Key_Resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent B2_Memory_Q
      letterHeight = 0.07
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Is this the image you saw?
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    TextComponent B2_Memory_Option
      letterHeight = 0.07
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = YES          NO
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  Routine B2_Perceive_2
    RoutineSettingsComponent B2_Perceive_2
      disabled = True
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    ImageComponent B2_P_Image2
      image [set every repeat] = $'imgs_diffusion/' + Object + '8.jpg'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent B2_P_Code_2
      Code Type = Auto->JS
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      Begin Routine:
        B2_P_Image.setImage('imgs_diffusion/' + Object + '8.jpg')
  Routine B2_Perceive_3
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  Routine P_Interval2
    RoutineSettingsComponent P_Interval2
      disabled = True
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Please remember the next image.
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  Routine P_Perceive
    RoutineSettingsComponent P_Perceive
      disabled = True
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    ImageComponent P_P_Image
      image [set every repeat] = $'imgs_diffusion/' + Object + '8.jpg'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent P_P_Code
      Code Type = Auto->JS
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      Begin Routine:
        P_P_Image.setImage('imgs_diffusion/' + Object + '8.jpg')
  Routine P_Interval3
    RoutineSettingsComponent P_Interval3
      disabled = True
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine P_WM
    RoutineSettingsComponent P_WM
      disabled = True
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    CodeComponent P_Memory_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Create a list of image names with specified counts
        P_image_pool = ['7.jpg'] * 1 + ['9.jpg'] * 1 + ['8.jpg'] * 1
        random.shuffle(P_image_pool)
        # Initialize a counter
        P_image_index = 0
      Begin Routine:
        # Get the next image
        P_chosen_image = P_image_pool[P_image_index]
        P_image_index += 1

        # Set the image for this trial
        P_Memory_Image.setImage('imgs_diffusion/' + Object + P_chosen_image)
    ImageComponent P_Memory_Image
      image [set every repeat] = $'imgs_diffusion/' + Object + P_chosen_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent P_Memory_Resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent P_Memory_Q
      letterHeight = 0.07
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Is this the image you saw?
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    TextComponent P_Memory_Option
      letterHeight = 0.07
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = YES          NO
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  Routine P_End
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    TextComponent VI_P_End
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = End of practice
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Flow
  Routine P_Start
  LoopInitiator P_Trials loopType="TrialHandler"
    conditionsFile = VI_P_Objects.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Color', 'red'), ('ObjectPrompt', 'a red bus'), ('Object', 'bus'), ('CatchQuestion', 'Is it an animal?'), ('CorrectAnswer', 'NO')]),
      OrderedDict([('Color', 'yellow'), ('ObjectPrompt', 'a yellow sunflower'), ('Object', 'sunflower'), ('CatchQuestion', 'Is it a cloth?'), ('CorrectAnswer', 'NO')]),
      OrderedDict([('Color', 'green'), ('ObjectPrompt', 'a green cabbage'), ('Object', 'cabbage'), ('CatchQuestion', 'Is it a food?'), ('CorrectAnswer', 'YES')]),
      OrderedDict([('Color', 'red'), ('ObjectPrompt', 'a red strawberry'), ('Object', 'strawberry'), ('CatchQuestion', 'Is it a tool?'), ('CorrectAnswer', 'NO')]),
      OrderedDict([('Color', 'yellow'), ('ObjectPrompt', 'a yellow pineapple'), ('Object', 'pineapple'), ('CatchQuestion', 'Is it a food?'), ('CorrectAnswer', 'YES')]),
      OrderedDict([('Color', 'yellow'), ('ObjectPrompt', 'a yellow trumpet'), ('Object', 'trumpet'), ('CatchQuestion', 'Is it an instrument?'), ('CorrectAnswer', 'YES')]),
      OrderedDict([('Color', 'grey'), ('ObjectPrompt', 'a grey bowl'), ('Object', 'bowl'), ('CatchQuestion', 'Is it a food?'), ('CorrectAnswer', 'NO')]),
      OrderedDict([('Color', 'black'), ('ObjectPrompt', 'a black pan'), ('Object', 'pan'), ('CatchQuestion', 'Is it a food?'), ('CorrectAnswer', 'NO')]),
      OrderedDict([('Color', 'brown'), ('ObjectPrompt', 'a brown backpack'), ('Object', 'backpack'), ('CatchQuestion', 'Is it an instrument?'), ('CorrectAnswer', 'NO')])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
    Routine P_Interval
    Routine P_Imagine
    Routine P_Rate
    Routine P_Catch
  LoopTerminator P_Trials
  Routine P_End
